PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Exp2_Stroop Effect
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $color
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'b','r'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine INSTRUCTION
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = WELCOME
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  Routine THANKS
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    TextComponent text_3
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = THANKYOU
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Flow
  Routine INSTRUCTION
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions defined.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'BLUE', 'color': 'blue', 'outcome': 'C', 'correct_response': 'B'},
      {'word': 'BLUE', 'color': 'red', 'outcome': 'I', 'correct_response': 'R'},
      {'word': 'RED', 'color': 'red ', 'outcome': 'C', 'correct_response': 'R'},
      {'word': 'RED', 'color': 'blue', 'outcome': 'I', 'correct_response': 'B'}]
    Routine trial
  LoopTerminator trials
  Routine THANKS
