PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1000,600]
  expName = Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code_50_50
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5: # 50:50 probability
            direction = -level
            corr_resp = 'left'
        else:
            direction = level
            corr_resp = 'right'
      End Routine:
        thisExp.addData('corrAns', corr_resp)
        thisExp.addData('tilt', direction)
        thisExp.addData('key_resp.corr', key_resp.corr)
    PolygonComponent fixation
      draggable = True
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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    GratingComponent grating
      contrast = 0.5
      draggable = True
      mask = gauss
      ori [set every repeat] = direction
      sf = 8
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Thank
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thankyou for participating
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Flow
  LoopInitiator stair loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 20
    min value = 1
    nReps = 100
    start value = 10
    step sizes = [2,1,1,0.5]
    step type = lin
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    Routine trial
  LoopTerminator stair
  Routine Thank
