PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Final Solo Project Psy310
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instruction_Page
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    TextComponent Introduction
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome.
        Please continue if you consent to participating in this study.
        You will see an image and hear an audio together.
        Respond to the audio you hear with:
        Happy - 'h'
        Sad - 's'
        Anger - 'a'
        Once you are ready to begin, please press the 'Space bar'.
    KeyboardComponent Begin_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent Image
      image [set every repeat] = $Face_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp
      allowedKeys = 'h','s','a'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    SoundComponent Sound
      forceEndRoutine = False
      sound [set every repeat] = $Sound_file
      speakerIndex = 4.0
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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  Routine Instruction
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome.
        Please continue if you consent to participating in this study.
        You will see an image and hear an audio together.
        Respond to the audio you hear with:
        Happy - 'h'
        Sad - 's'
        Anger - 'a'
        Once you are ready to begin, please press the 'Space bar'.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions file.xlsx
    loopType = random
    nReps = 12
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    conditions:
      [{'Face_file': 'Face_file/Anger.jpg', 'Sound_file': 'Sound_file/Anger.wav', 'Face_emotion': 'Anger', 'Sound_emotion': 'Anger', 'Congruency': 'C', 'corr_resp': 'a'},
      {'Face_file': 'Face_file/Happy.jpg', 'Sound_file': 'Sound_file/Happy.wav', 'Face_emotion': 'Happy', 'Sound_emotion': 'Happy', 'Congruency': 'C', 'corr_resp': 'h'},
      {'Face_file': 'Face_file/Sad.jpg', 'Sound_file': 'Sound_file/Sad.wav', 'Face_emotion': 'Sad', 'Sound_emotion': 'Sad', 'Congruency': 'C', 'corr_resp': 's'},
      {'Face_file': 'Face_file/Happy.jpg', 'Sound_file': 'Sound_file/Anger.wav', 'Face_emotion': 'Happy', 'Sound_emotion': 'Anger', 'Congruency': 'I', 'corr_resp': 'a'},
      {'Face_file': 'Face_file/Sad.jpg', 'Sound_file': 'Sound_file/Anger.wav', 'Face_emotion': 'Sad', 'Sound_emotion': 'Anger', 'Congruency': 'I', 'corr_resp': 'a'},
      {'Face_file': 'Face_file/Anger.jpg', 'Sound_file': 'Sound_file/Happy.wav', 'Face_emotion': 'Anger', 'Sound_emotion': 'Happy', 'Congruency': 'I', 'corr_resp': 'h'},
      {'Face_file': 'Face_file/Sad.jpg', 'Sound_file': 'Sound_file/Happy.wav', 'Face_emotion': 'Sad', 'Sound_emotion': 'Happy', 'Congruency': 'I', 'corr_resp': 'h'},
      {'Face_file': 'Face_file/Anger.jpg', 'Sound_file': 'Sound_file/Sad.wav', 'Face_emotion': 'Anger', 'Sound_emotion': 'Sad', 'Congruency': 'I', 'corr_resp': 's'},
      {'Face_file': 'Face_file/Happy.jpg', 'Sound_file': 'Sound_file/Sad.wav', 'Face_emotion': 'Happy', 'Sound_emotion': 'Sad', 'Congruency': 'I', 'corr_resp': 's'}]
    Routine trial
  LoopTerminator trials
