PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Motor sequence
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixtion
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequence_con.xlsx
    loopType = sequential
    nReps = 25
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    conditions:
      [{'pos': -50, 'corr_resp': 'x'},
      {'pos': 150, 'corr_resp': 'v'},
      {'pos': 50, 'corr_resp': 'c'},
      {'pos': -150, 'corr_resp': 'z'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sequence_con.xlsx
    loopType = fullRandom
    nReps = 25
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    conditions:
      [{'pos': -50, 'corr_resp': 'x'},
      {'pos': 150, 'corr_resp': 'v'},
      {'pos': 50, 'corr_resp': 'c'},
      {'pos': -150, 'corr_resp': 'z'}]
    Routine trial
  LoopTerminator trials_2
