PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Word Priming Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent Studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0,-0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit 
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2_looptype loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'references': 'laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'references': 'chart', 'old_new': 'old'},
      {'test_word': 't_hi_t', 'references': 'tshirt', 'old_new': 'old'},
      {'test_word': '_ou_se', 'references': 'mouse', 'old_new': 'old'},
      {'test_word': 'p_s_tr_', 'references': 'pastry', 'old_new': 'old'},
      {'test_word': 'c_s_', 'references': 'case', 'old_new': 'old'},
      {'test_word': '_ru_is_', 'references': 'cruise', 'old_new': 'old'},
      {'test_word': 'p_li_e', 'references': 'police', 'old_new': 'old'},
      {'test_word': 'k_y_', 'references': 'keys', 'old_new': 'old'},
      {'test_word': 'p_st_r', 'references': 'poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'references': 'board', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'references': 'marble', 'old_new': 'old'},
      {'test_word': '_ho_e', 'references': 'phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'references': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_io_', 'references': 'cushion', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'references': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'references': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'references': 'vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'references': 'bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'references': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2_looptype
